neuron izh_cond_exp2syn:
  state:
    V_m mV = c
    U_m mV = b * V_m
    a_opto real = 0.0
    opto boolean = false

  equations:
    kernel g_exc = exp(-t / tau2_exc) - exp(-t / tau1_exc)
    kernel g_inh = exp(-t / tau2_inh) - exp(-t / tau1_inh)
    inline I_exc pA = factor_exc*convolve(g_exc, spike_exc) * (E_exc - V_m)
    inline I_inh pA = factor_inh*convolve(g_inh, spike_inh) * (E_inh - V_m)
    inline I_opto pA = g_opto * (E_opto - V_m) * a_opto
    inline dV mV = 0.04*V_m*V_m/mV + 5.0*V_m + (140.0 mV - U_m)
    V_m' = dV/ms + (I_e + I_stim + I_exc + I_inh + I_opto)/C_m
    U_m' = a*(b*V_m - U_m) / ms
    a_opto' = -a_opto / tau_opto

  # Normalization factors for the synaptic conductances to ensure that the
  # maximum conductance is equal to the synaptic weight.
  function biexp_scaling_factor(tau1 ms, tau2 ms) real:
    tpeak ms = tau1*tau2 / (tau2 - tau1) * ln(tau2 / tau1)
    return 1 / (exp(-tpeak / tau2) - exp(-tpeak / tau1))

  internals:
    factor_exc real = biexp_scaling_factor(tau1_exc, tau2_exc)
    factor_inh real = biexp_scaling_factor(tau1_inh, tau2_inh)

  parameters:
    a real = 0.02        # describes time scale of recovery variable
    b real = 0.2         # sensitivity of recovery variable
    c mV = -65 mV        # after-spike reset value of V_m
    d mV = 8.0 mV        # after-spike reset value of U_m
    I_e pA = 0.0 pA      # constant external input current
    # rise time constant of excitatory synaptic conductance
    tau1_exc ms = 0.5 ms [[0 ms < tau1_exc and tau1_exc < tau2_exc]]
    # decay time constant of excitatory synaptic conductance
    tau2_exc ms = 5.0 ms [[0 ms < tau1_exc and tau1_exc < tau2_exc]]
    # rise time constant of inhibitory synaptic conductance
    tau1_inh ms = 0.5 ms [[0 ms < tau1_inh and tau1_inh < tau2_inh]]
    # decay time constant of inhibitory synaptic conductance
    tau2_inh ms = 5.0 ms [[0 ms < tau1_inh and tau1_inh < tau2_inh]]
    C_m pF = 100.0 pF    # membrane capacitance
    E_exc mV = 0.0 mV    # excitatory synaptic reversal potential
    E_inh mV = -80.0 mV  # inhibitory synaptic reversal potential
    E_opto mV = -85.0 mV # optogenetic reversal potential
    g_opto nS = 0.0 nS   # conductance when the optogenetic switch is on
    # decay time constant of optogenetic conductance
    tau_opto ms = 50 ms [[0 ms < tau_opto]]

  input:
    spike_exc nS <- excitatory spike
    spike_inh nS <- inhibitory spike
    I_stim pA <- continuous

  output:
    spike

  update:
    integrate_odes()

    # Peg opto activation whenever the light is on.
    if opto:
      a_opto = 1

    # threshold crossing
    if V_m >= 30 mV:
      V_m = c
      U_m += d
      emit_spike()
